PsychoPy2experiment version="1.82.02"
Settings
  Data filename = u'data' + os.path.sep + expInfo['date']
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {u'                   uid': u'001', u'            session': u'001'}
  expName = Melody Memory Task
  Units = use prefs
  Screen = 1
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Routines
  Routine pause
    TextComponent pausetext
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text_end
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A kísérlet befejeződött.

        Köszönjük a részvételt!

        Kérjük, nyomja meg a szóköz billentyűt a kísérletből való kilépéshez.
    KeyboardComponent end_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start
    TextComponent text_start
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Gold-MSI Dallammemória-teszt

        Amennyiben elolvasta az instrukciókat, és nincsen további kérdése, kérjük, nyomja meg a SZÓKÖZ billentyűt a kísérlet indításához.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial2
    SoundComponent sound_2
      sound [set every repeat] = $sound2
      stopVal [duration (s)] = sound_2.getDuration()
      startVal [time (s)] = 0.0
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    TextComponent text_sound2
      text = 2
      stopVal [duration (s)] = sound_2.getDuration()
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    CodeComponent melmemcode
      Begin Experiment:
        sound_1 = sound.Sound('A',secs=1)
        sound_2 = sound.Sound('B',secs=1)
    SoundComponent sound_1
      sound [set every repeat] = $sound1
      stopVal [duration (s)] = sound_1.getDuration()
      startVal [time (s)] = 0.0
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    TextComponent text_sound1
      text = 1
      stopVal [duration (s)] = sound_1.getDuration()
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine decide
    TextComponent decide_text
      wrapWidth = 80
      durationEstim = 10
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Megegyezett a második dallam az elsővel,
        eltekintve attól, hogy más hangmagasságban hangzott el?
        0 = Nem egyezett meg, 1 = Megegyezett
    RatingScaleComponent judgement
      pos = 0, 0.4
      high = 1
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = False
      low = 0
      durationEstim = 10
      categoryChoices = 0,1
      singleClick = True
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    TextComponent text
      wrapWidth = 80
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Mennyire biztos ebben a válaszában?
        1 = Csak tippeltem. 2 = Azt hiszem, hogy helyes.
        3 = Biztos, vagyok benne, hogy helyes.
    RatingScaleComponent confidence
      pos = 0, -0.4
      high = 3
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
      durationEstim = 10
      categoryChoices = 1,2,3
      singleClick = True
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  Routine instructions
    TextComponent text_instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_instructions
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = MelodyMemory_v10.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'sound1': u'MelodyMemory_v10/1_Deck_original_F.wav', 'sound2': u'MelodyMemory_v10/1_Deck_nearby_C_violate_inkey.wav', 'true_answer': 0},
      {'sound1': u'MelodyMemory_v10/11_WeWish_original_D.wav', 'sound2': u'MelodyMemory_v10/11_WeWish_nearby_G_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/12_YankeeDaddy_original_G.wav', 'sound2': u'MelodyMemory_v10/12_YankeeDaddy_distant_Ab_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/13_PDeck_original_C.wav', 'sound2': u'MelodyMemory_v10/13_PDeck_nearby_G_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/14_PDoremi_original_Bb.wav', 'sound2': u'MelodyMemory_v10/14_PDoremi_nearby_F_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/15_PGodBless_original_Eb.wav', 'sound2': u'MelodyMemory_v10/15_PGodBless_nearby_Bb_violate_inkey.wav', 'true_answer': 0},
      {'sound1': u'MelodyMemory_v10/20_PMyCountry_original_E.wav', 'sound2': u'MelodyMemory_v10/20_PMyCountry_distant_Eb_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/25_PHappyBirthday_original_C.wav', 'sound2': u'MelodyMemory_v10/25_PHappyBirthday_nearby_G_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/26_PJingle_original_Bb.wav', 'sound2': u'MelodyMemory_v10/26_PJingle_nearby_F_identical.wav', 'true_answer': 1},
      {'sound1': u'MelodyMemory_v10/27_POCome_original_C.wav', 'sound2': u'MelodyMemory_v10/27_POCome_distant_violate_inkey_D.wav', 'true_answer': 0}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
    Routine pause
    Routine trial
    Routine pause
    Routine trial2
    Routine decide
  LoopTerminator trials
  Routine end
